suffix = ".tif";

// multiple input folders
inputDirs = newArray();
addMore = true;
while (addMore) {
    dir = getDirectory("Choose an Input Directory");
    inputDirs = Array.concat(inputDirs, dir);
    addMore = getBoolean(inputDirs.length + " folder(s) selected so far. Add another input folder?");
}

run("Set Measurements...", "area mean redirect=None decimal=3");
for (d=0; d<inputDirs.length; d++) {
    processFolder(inputDirs[d]);
}

// output folder
output = getDirectory("Output Directory");
selectWindow("Summary");
Table.save(output + "combined_summary.csv");

// clear everything
run("Clear Results");
selectWindow("Summary");
run("Close");

function processFolder(input) {
	list = getFileList(input);
	for (i=0; i<list.length; i++) {
	    if(File.isDirectory(list[i]))
			processFolder(""+input+list[i]);
	    if(endsWith(list[i],suffix))
			processFile(input,list[i]);
	}
}

function processFile(input, file) {

run("Bio-Formats Importer", "open=[" + input + file + "] autoscale color_mode=Default view=Hyperstack stack_order=XYCZT");
run("RGB Color");
a = getTitle();

// TISSUE ROI + CLEAR BACKGROUND -------------------------------------
// Reset ROI Manager so ROIs don't accumulate
roiManager("reset");

// Duplicate the image to build the tissue mask, so the original is untouched
run("Duplicate...", "title=tissue_mask");
run("8-bit");
setThreshold(11, 255);
run("Convert to Mask");
run("Fill Holes");
run("Create Selection");
roiManager("Add");
close(); // closes "tissue_mask"

// Apply the tissue ROI to the original image and clear everything outside it
selectWindow(a);
roiManager("Select", 0);
run("Clear Outside");
run("Select None");
// --------------------------------------------------------------------
// Color Thresholder 2.18.0/1.54p
// Autogenerated macro, single images only!
min=newArray(3);
max=newArray(3);
filter=newArray(3);
run("HSB Stack");
run("Convert Stack to Images");
selectWindow("Hue");
rename("0");
selectWindow("Saturation");
rename("1");
selectWindow("Brightness");
rename("2");
min[0]=34;
max[0]=230;
filter[0]="stop";
min[1]=92;
max[1]=255;
filter[1]="pass";
min[2]=122;
max[2]=255;
filter[2]="pass";
for (i=0;i<3;i++){
  selectWindow(""+i);
  setThreshold(min[i], max[i]);
  run("Convert to Mask");
  if (filter[i]=="stop")  run("Invert");
}
imageCalculator("AND create", "0","1");
imageCalculator("AND create", "Result of 0","2");
for (i=0;i<3;i++){
  selectWindow(""+i);
  close();
}
selectWindow("Result of 0");
close();
selectWindow("Result of Result of 0");
rename(a);
// Colour Thresholding-------------

// RESTRICT ANALYSIS TO TISSUE ROI -------------------------------------
// Re-apply the tissue ROI (saved earlier in the ROI Manager) so Analyze
// Particles measures %Area relative to tissue area, not whole-image area.
roiManager("Select", 0);
run("Analyze Particles...", "size=15-Infinity display summarize limit");
run("Select None");
// ---------------------------------------------------------------------

run("Close All");
}
